PsychoPy2experiment version="3.2.4"
Settings
  Audio latency priority = 4
  Audio lib = pyo
  Experiment info = {'participant': 'Optionnel', 'Email': 'Optionnel@gmail.com', 'Sexe [ F/M ] (*)': 'F', 'Age (*)': '25', 'Niveau éducation( bac=12, bac+5=17 ) (*)': '12', 'Droitier ou Gaucher (*)': 'Droitier', 'Profession (*)': 'Profession'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 3.2.4
  Window size (pixels) = [1920, 1080]
  color = $[1.000,1.000,1.000]
  expName = BIP2online
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Routines
  Routine sessInst
    TextComponent sessionNew
      color = black
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        CONSENTEMENT POUR LA PARTICIPATION A UNE ETUDE DE RECHERCHE

        DIFFERENCE INDIVIDUELLE DANS L'IMAGERIE MENTALE VISUELLE

        N° ID-RCB: CER-2020-110 (Sorbonne Université)
    KeyboardComponent key_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent textConsent
      color = black
      letterHeight = 0.018
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si « je consens à participer », je confirme que :
        • J'ai bien lu et compris la note d'information décrivant les objectifs de cette étude, ses modalités et les engagements liés à ma participation à celle-ci. Le personnel en charge de l'étude a répondu à mes questions. Je serai informé de toute information pertinente concernant l'étude dès lors qu'elle est susceptible d'influencer ma participation.
        • J'accepte librement et volontairement de participer à cette étude. J'ai compris que je suis libre d'arrêter à tout moment ma participation au cours de l'étude, sans avoir besoin de justifier ma décision. Conformément à l'article L 1122-1 du Code de la Santé Publique, les résultats globaux de l'étude pourront m'être communiqués si je le souhaite.
        • Je ne recevrai aucune indemnisation financière pour cette étude. J'ai lu et compris la fiche d'information décrivant les objectifs et les modalités de l'étude. En particulier, je comprends que je ne recevrai mon indemnisation financière que si j'ai participé à l'ensemble de l'étude.
        • J'accepte que les données recueillies à l'occasion de cette étude puissent, après anonymisation, faire l'objet d'un traitement automatisé et entre consultées ou analysées par des personnes collaborant à cette étude, ou mandatées par Sorbonne Université pour le contrôle de qualité de l'étude. Ces données non-identifiants pourront être conservées jusqu'à une période de 25 ans dans un espace sécurisé, sous la responsabilité de l'investigateur responsable de l'étude. J'ai compris que je suis libre d'arrêter à tout moment ma participation au cours de l'étude, sans avoir besoin de justifier ma décision.
        • J'accepte que les données générées au cours de, ou issues de cette étude, soient après désidentification, utilisées ou partagées sans accord ultérieur de ma part pour des recherches dans le domaine des neurosciences ou des analyses complémentaires à la présente recherche en collaboration avec des partenaires publics ou prives, en France ou en dehors de l'Union Européenne, dans des pays considérés par la CNIL comme n'offrant pas le même niveau de protection que la France en matière de données personnelles.
        • Mon consentement ne décharge pas les organisateurs de cette étude de leurs responsabilités. Je conserve tous mes droits garantis par la loi. En particulier, conformément à la loi 78-17 du 06 janvier 1978 relative à l'Informatique, aux Fichiers et aux Libertés (modifiée par la loi n°94-548 du 1er juillet 1994). Je pourrai exercer mes droits directement auprès du responsable scientifique de l'étude (contact : paolo.bartolomeo@icm-institute.org).
        Je peux, également, exercer mes droits auprès du/de la Délégué·e à la Protection des Données de Sorbonne Université dpd@sorbonne-universite.fr, Campus Pierre et Marie Curie, 4 place Jussieu - 75252 Paris Cedex 05.
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        textConsent.setAlignHoriz('left')
        consent1.setAlignHoriz('left')
        consent2.setAlignHoriz('left')
    TextComponent consent1
      color = green
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Si « je consens à participer », appuyez sur la touche < Espace >
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    TextComponent consent2
      color = blue
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Si « je NE consens PAS à participer », appuyez sur la touche < Echap >
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  Routine volumeson
    TextComponent texttitlesession
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Calibration du volume de son
    SoundComponent sound_1
      hamming = False
      saveStartStop = False
      sound = audioStims/MarioTest2.wav
      startVal [time (s)] = 0.0
      volume = 8
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent textvolumeson
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Assurez-vous que vous entendez bien une musique et que le volume du son est correct.

        Nous vous recommandons de porter des écouteurs pour ce test et de mettre le son à un niveau confortable pour vous.
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        textvolumeson.setAlignHoriz('left')
    TextComponent touchecontinuer
      color = green
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Appuyez sur la touche < Espace > pour continuer. Si vous n’entendez pas la musique, appuyez sur la touche <Echap>
  Routine vivdness
    SoundComponent sound_2
      saveStartStop = False
      sound = audioStims/saut.wav
      startVal [time (s)] = 0.0
      volume = 8
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    KeyboardComponent key_resp_vividness
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = la vivacité de l'image mentale? (Verr.Maj, 1 à 4)
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  Routine vividnessInstr
    TextComponent vivacitetest
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 1/3 : Évaluation de Vivacité des images mentales
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    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vivacitetest2
      color = green
      letterHeight = 0.03
      pos = (0, 0.31)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Par exemple, imaginez attentivement La Jaconde.
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    TextComponent vivid_Instr
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 3
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      text:
        Évaluer la vivacité de votre image mentale avec une note de 1 à 5:

        1 : aucune image n’est visible.
        2 : l’image est vague et imprécise.
        3 : l’image est moyennement claire et nette.
        4 : l’image est relativement claire, presque aussi nette et précise qu’une perception visuelle.
        5 : l’image est parfaitement claire, aussi nette et précise qu’une véritable perception visuelle.
    ImageComponent image_2
      image = img/vivacite.jpg
      pos = (0, -0.28)
      saveStartStop = False
      size = (0.95, 0.2)
      startVal [time (s)] = 3
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    TextComponent responsevivacitebegin
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 4
      text = Saisir une note (1 à 5) pour continuer. Utilisez la partie EN HAUT A GAUCHE de votre clavier.
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        vivid_Instr.setAlignHoriz('left')
        vivacitetest2.setAlignHoriz('left')
  Routine testKeys
    TextComponent claviertest
      color = red
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Calibration du clavier
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    TextComponent displayText
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Pendant ce test, vous allez devoir utiliser les touches suivantes sur la partie EN HAUT A GAUCHE de votre clavier:
                      '1',  '2',  '3',  '4',  '5'
        Appuyez sur les boutons un par un, assurez-vous que votre clavier fonctionne bien.
        Le bouton sur lequel vous venez d'appuyer est :
    TextComponent keysDisplay
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_show
      allowedKeys = '1','2','3','4','5','left','right','space','t','b','y','g','r','comma','return'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        displayText.setAlignHoriz('left')
        keysDisplay.text = '';
      Begin Routine:
        textFill = ''
      Each Frame:
        keysGet = key_show.keys

        if keysGet == 'return':
            continueRoutine = False
        else:
            keysDisplay.setText(keysGet)
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();

        if (theseKeys.length > 0) {
          keysGet = theseKeys[theseKeys.length-1];
          }


        if (keysGet == 'return'){
            continueRoutine = false;
        } else {
            keysDisplay.text = keysGet;
        }
    TextComponent testcontinuer
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si votre clavier est bon, appuyez sur la touche < Entrée >.
    ImageComponent image_3
      image = img/clavier.jpg
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.3)
      startVal [time (s)] = 0.0
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  Routine beginbip2
    TextComponent begininstruc
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Commençons la première partie du test, êtes-vous prêt? 
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent contunuetouche
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Continuez avec la touche < Espace >
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  Routine consignevviq
    TextComponent vviqconsigneinst
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 1/3 : Test de vivacité
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    TextComponent vviqconsignetext2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nous allons vous décrire des scénarios, que vous devrez imaginer dans votre esprit. Ensuite, nous vous demanderons de donner une note de 1 à 5 pour évaluer sa vivacité.

        Le test de vivacité prend environ 3 minutes.
    TextComponent vviqconsignetext3
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Appuyez sur la touche < Espace >.
    KeyboardComponent vmipasskey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vviqconsignetext4
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Très bien!
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  Routine resting
    TextComponent consignetest
      color = red
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedbackVVIQ
    TextComponent textTestName
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 1/3 : Résultat du test de vivacité
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    CodeComponent codevmi
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
        previousLength = 0;
      Begin JS Routine:
        resultvviq.setAlignHoriz('left')

        responses = psychoJS.experiment._trialsData
        subBlock = responses.slice(previousLength)
        console.log("subBlock est : ")
        console.log(subBlock)

        let myvviqscore = 0;
        subBlock.forEach( entry => {
                myvviqscore += parseInt(entry["key_resp_vviq.keys"]);
            });

        if (myvviqscore > 70) {
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de "+ myvviqscore.toFixed(0) + " sur 80. Je vous invite à réaliser la partie suivante qui visera à évaluer votre imagerie mentale via différentes catégories.";
            colortext = 'green';
        } else if (myvviqscore >=25) {
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de "+ myvviqscore.toFixed(0) + " sur 80. Je vous invite à réaliser la partie suivante qui visera à évaluer votre imagerie mentale via différentes catégories.";
            colortext = 'green';
        } else {
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de "+ myvviqscore.toFixed(0) + " sur 80. Je vous invite à réaliser la partie suivante qui visera à évaluer votre imagerie mentale via différentes catégories.";
            colortext = 'red'

        }

        previousLength = responses.length
      Begin Routine:
        score1 = vviqblock.data['key_resp_vviq.keys']
        myvviqscore = sum([int(item) for item in score1])
        if myvviqscore > 70 :
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de %i  sur 80. Votre capacité est supérieur dans la population. Bravo! Je vous invite à commenter notre post et à nous écrire un mail à la fin de session" %(myvviqscore)
            colortext = 'green'
        elif myvviqscore >= 30:
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de %i  sur 80. Bravo! Je vous invite à commenter notre post à la fin de session" %(myvviqscore)
            colortext = 'green'
        else :
            msg = "Pour ce test de vivacité, vous avez obtenue un score total de %i  sur 80. Je vous invite à nous contacter et à faire la partie suivante qui évaluer votre image mentale par catégorie." %(myvviqscore)
            colortext = 'red'
    TextComponent endtesttext
      color = green
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Appuyez sur la touche < Espace > pour continuer la deuxième partie.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent resultvviq
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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  Routine practiceimagery
    TextComponent imageryinst1
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 2/3 : Test d'Imagerie Mentale Visuelle
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    TextComponent imagerystri2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Dans cette deuxième partie, nous allons évaluer votre imagination via des test couvrant cinq catégories: forme, couleur, visage, lettre et carte.

        Pour chaque catégorie, vous commencez par un exemple pour nous entraîner. Ensuite, vous répondez aux 15 essaies.

        Le test de l'imagerie mental prend environ 10 minutes.
    TextComponent imageryinst3
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Appuyez sur la touche < Espace > pour continuer.
    KeyboardComponent passkey2vmi
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent leftaligntext2
      Code Type = Both
      Begin JS Routine:
        imagerystri2.setAlignHoriz('left')
  Routine trialvividnesspractive
    TextComponent testdunompractive
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nomdutest
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    TextComponent vivacitetrialconsigne
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vividnesstext
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    KeyboardComponent key_practice_vivid
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codesetalign
      Code Type = Both
      Begin JS Routine:
        vivacitetrialconsigne.setAlignHoriz('left')
  Routine prepareimagerytest
    TextComponent prepareimagery
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 2/3 : Test de l'imagination
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    TextComponent prepareconsigne
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bravo !

        Maintenant, nous allons commencer à tester.

        Prenez votre temps pour répondre à chaque question.
    KeyboardComponent passtest1vmi
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent preeaze
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Appuyez sur la touche <Espace> quand vous êtes prêt.
    CodeComponent codesetalignprepare
      Code Type = Both
      Begin JS Routine:
        prepareconsigne.setAlignHoriz('left')
  Routine vividnesstrials
    TextComponent vivacitetextscore
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Donnez une note de 1 à 4 pour évaluer la vivacité.
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    KeyboardComponent key_trial_vividness
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedbackimagery
    TextComponent imageryfeedbacktestname
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 2/3 : Test d’Imagerie Mentale Visuelle
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    CodeComponent imagerycode
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
      Begin JS Routine:
        responses = psychoJS.experiment._trialsData
        subBlock = responses.slice(previousLength + 1)
        console.log("subBlock est : ")
        console.log(subBlock)


        let meanRT = 0;
        subBlock.forEach( entry => {
                meanRT += entry["key_resp_vmi.rt"];
            });
        meanRT /= subBlock.length;

        let corrRate = 0;
        subBlock.forEach( entry => {
            if ((entry["key_resp_vmi.keys"] == entry["correctAns"].toString())) {
                corrRate += 1;
                entry["key_resp_vmi.corr"] = 1;
            } else {
                corrRate += 0;
                entry["key_resp_vmi.corr"] = 0;
            }
            });
        corrRate = corrRate / subBlock.length * 100

        console.log("meanRt est : ")
        console.log(meanRT)


        if (corrRate > 70) {
            msg = "Vous avez réussi "+ corrRate.toFixed(0) + " pourcent des essais avec un temps de réponse moyen de " + meanRT.toFixed(1) + " seconde. Bravo! Continuons!" ;
            colortext = 'green';
        } else {
            msg = "Vous avez réussi "+ corrRate.toFixed(0) + " pourcent des essais avec un temps de réponse moyen de " + meanRT.toFixed(1) + " seconde. Avez-vous rencontrés des difficultés à imaginer les items pour cette catégorie? Continuons!";
            colortext = 'red';
        }

        previousLength = responses.length
      Begin Routine:
        ntrial = len(imageryTrials.data['key_resp_vmi.keys'])  #numpy array with size=[ntrials,ntypes]
        nCorr = imageryTrials.data['key_resp_vmi.corr'].sum() #.std(), .mean() also available
        meanRt = imageryTrials.data['key_resp_vmi.rt'].mean()
        corrRate = nCorr/ntrial*100

        if corrRate > 75 :
            msg = "Vous avez réussi %i pourcent des essais avec un temps de réponse moyen de %.2f seconde(s). Bravo!" %(corrRate,meanRt)
            colortext = 'green'
        else :
            msg = "Vous avez réussi %i pourcent des essais avec un temps de réponse moyen de %.2f seconde(s). Avez-vous rencontrés des difficultés ? Vous pourrez nous laisser vos commentaires lors de votre retour sur le site à la fin des tests." %(corrRate,meanRt)
            colortext = 'red'
    TextComponent feedbackimagerytext
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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    KeyboardComponent key_passtonexttask
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent textpasstexts
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur la touche <Espace> pour continuer.
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  Routine perceptioninstr
    TextComponent prepareperceptionconsigne
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Partie 3/3 : Voir et comparer les images
    TextComponent prepareperceptioninstr
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Dans cette dernière partie, nous allons vous montrer des photos d’objets, de personnages célèbres, d’aliments ou des mots écrits que nous vous avions demandé d’imaginer tout au long de la partie 2 de ce test.

        Lors de cette partie, vous allez devoir répondre aux questions en comparant les caractéristiques visuelles perçues grâce aux photos que vous allez pouvoir VOIR.

        Le test de perception prend environ 4 minutes, avec 30 essaies en total.

        Attention, pour la test de carte, selectionnez la ville indiqué par un point rouge (première ville ou deuxième ville apparait).

        Après chaque question, évaluez le degré de CONFIANCE de votre réponse :
        1 : Je n’ai pas du tout confiance dans ma réponse
        2 : Je suis un peu confiant sur ma réponse
        3 : J’ai confiance dans ma réponse
        4 : Je suis sûr de ma réponse
    KeyboardComponent key_passtoperception
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent passnexttrialpercept
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Appuyez sur 'Espace' pour continuer.
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    CodeComponent codesetalignperins
      Code Type = Both
      Begin JS Routine:
        prepareperceptioninstr.setAlignHoriz('left')
  Routine practicetrials
    TextComponent practicenomdutest
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nomdutest
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    SoundComponent Mots1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent Mots2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent instrMots
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 3
      volume = 8
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    KeyboardComponent key_resp_practice
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $instrMots.status==FINISHED
      store = nothing
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    TextComponent consignepracticeins
      color = black
      letterHeight = 0.03
      pos = (0, 0.13)
      saveStartStop = False
      startVal [time (s)] = 3.5
      text [set every repeat] = $consignepractice
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    ImageComponent image_practice
      image [set every repeat] = $img1
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.3, 0.25)
      startVal [time (s)] = 4
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    TextComponent bonnereponse
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 4
      text [set every repeat] = $testcontinue
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    CodeComponent codesetalignleft
      Code Type = Both
      Begin JS Routine:
        consignepracticeins.setAlignHoriz('left')
  Routine confiance
    TextComponent percept_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumber
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    TextComponent vivacitetextscore_2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Donnez une note de 1 à 4 pour évaluer la CONFIANCE.

        1 : Je n’ai pas du tout confiance dans ma réponse
        2 : je suis un peu confiant sur ma réponse
        3 : J’ai confiance dans ma réponse
        4 : Je suis sûr de ma réponse
    KeyboardComponent key_percept_confiance
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_alignx
      Code Type = Both
      Begin JS Routine:
        vivacitetextscore_2.setAlignHoriz('left')
  Routine endsession
    TextComponent findusessioninst
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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      text:
        Fin de la session. Merci de votre participation!


        N'hésitez pas à commenter sur le site ou nous contacter:

        - Partagez votre experience de la vie et votre résultat.
        - Intérêssé par un test en neuro-imagerie IRMf pour la recherche.
        - ...


        Attendez le programme se ferme ou appuyez sur la touche <Espace> pour terminer après 5 seconde.
    KeyboardComponent key_findusession
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      store = nothing
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    CodeComponent codefindusession
      Code Type = JS
      Begin JS Routine:
        findusessioninst.setAlignHoriz('left')
  Routine vviqtrialblock
    TextComponent consignevviqtest
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 1/3 : Test de vivacité
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    KeyboardComponent key_resp_vviq
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent VVIQitemscore
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Donner une note de 1 à 5 pour évaluer sa vivacité
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    TextComponent testnumbervviq
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbervviq
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    TextComponent text_item_vviq
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    TextComponent text_senario
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $senario
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  Routine imageryitemtrials
    TextComponent practicenomdutest_2
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 2/3 : Test d'Imagerie Mentale Visuelle
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    TextComponent testnumberimagery
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumber
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    SoundComponent vmiMots1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent vmiMots2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent vmiinstrMots
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 3
      volume = 8
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    KeyboardComponent key_resp_vmi
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [condition] = $vmiinstrMots.status==FINISHED
      storeCorrect = True
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    ImageComponent image1
      image [set every repeat] = $img1
      saveStartStop = False
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image2
      image [set every repeat] = $img2
      saveStartStop = False
      size = (0.01, 0.01)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent image3
      image [set every repeat] = $imgCompare
      saveStartStop = False
      size = (0.01, 0.01)
      startVal [time (s)] = 3
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    TextComponent bonnereponse_2
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Donnez votre réponse :  première (touche "1") ou deuxième (touche "2").
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  Routine feedbackperception
    TextComponent perceptionfeedbacktestname
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 3/3 : Test de perception visuelle
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    CodeComponent perceptioncode
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
      Begin JS Routine:
        feedbackperceptiontext.setAlignHoriz('left')

        responses = psychoJS.experiment._trialsData
        subBlock = responses.slice(previousLength + 1)
        console.log("subBlock est : ")
        console.log(subBlock)


        let meanRT = 0;
        subBlock.forEach( entry => {
                meanRT += entry["key_resp_percept.rt"];
            });
        meanRT /= subBlock.length;

        let corrRate = 0;
        subBlock.forEach( entry => {
            if ((entry["key_resp_percept.keys"] == entry["correctAns"].toString())) {
                corrRate += 1;
                entry["key_resp_percept.corr"] = 1;
            } else {
                corrRate += 0;
                entry["key_resp_percept.corr"] = 0;
            }
            });
        corrRate = corrRate / subBlock.length * 100

        console.log("meanRt est : ")
        console.log(meanRT)


        if (corrRate > 75) {
            msg = "Vous avez réussi "+ corrRate.toFixed(0) + " pourcent des essais avec un temps de réponse moyen à " + meanRT.toFixed(1) + " seconde. Bravo!" ;
            colortext = 'green';
        } else {
            msg = "Vous avez réussi "+ corrRate.toFixed(0) + " pourcent des essais avec un temps de réponse moyen à " + meanRT.toFixed(1) + " seconde. Avez-vous rencontré certaines difficultés ?" ;
            colortext = 'red';
        }

        previousLength = responses.length
      Begin Routine:
        ntrial = len(perceptionTrials.data['key_resp_percept.keys'])  #numpy array with size=[ntrials,ntypes]
        nCorr = perceptionTrials.data['key_resp_percept.corr'].sum() #.std(), .mean() also available
        meanRt = perceptionTrials.data['key_resp_percept.rt'].mean()
        corrRate = nCorr/ntrial*100

        if corrRate > 75 :
            msg = "Vous avez réussi %i pourcent des essais avec un temps de réponse moyen de %.2f seconde(s). Bravo!" %(corrRate,meanRt)
            colortext = 'green'
        else :
            msg = "Vous avez réussi %i pourcent des essais avec un temps de réponse moyen de %.2f seconde(s). Avez-vous rencontré certaines difficultés ? Laissez votre commentaires ou et nous contacter." %(corrRate,meanRt)
            colortext = 'red'
    TextComponent feedbackperceptiontext
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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    KeyboardComponent key_passtonexttask_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent textpasstexts_2
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur 'Espace' pour continuer.
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  Routine perceptioneachtrial
    ImageComponent perceptimage1
      image [set every repeat] = $img1
      saveStartStop = False
      size = (1.45, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent perceptimage2
      image [set every repeat] = $img2
      saveStartStop = False
      size = (1.45, 0.8)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent perceptimage3
      image [set every repeat] = $imgCompare
      saveStartStop = False
      size = (1.45, 0.8)
      startVal [time (s)] = 3
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    TextComponent practicenomdutesttrst
      color = black
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Partie 3: Voir et compare les images
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    SoundComponent perceptMots1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent perceptMots2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $mots2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      volume = 8
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    SoundComponent perceptinstrMots
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 3
      volume = 8
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    KeyboardComponent key_resp_percept
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 3
      storeCorrect = True
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    TextComponent bonnereponsepercep
      color = green
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Donnez votre réponse :  première (touche "1") ou deuxième (touche "2").
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Flow
  Routine sessInst
  Routine volumeson
  Routine testKeys
  Routine beginbip2
  Routine vividnessInstr
  Routine consignevviq
  LoopInitiator vviqblock loopType="TrialHandler"
    conditions = [OrderedDict([('vviqconsigne', 'audioStims/vviq/2.wav'), ('trialnumbervviq', '2 sur 16 essais')])]
    conditionsFile = vviq.xlsx
    loopType = sequential
    nReps = 1
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    Routine vviqtrialblock
  LoopTerminator vviqblock
  Routine feedbackVVIQ
  Routine practiceimagery
  LoopInitiator imagery_domains loopType="TrialHandler"
    conditionsFile = Imagery_domain_selection.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('practiceIdx', 0), ('trialRow', '0:2')]),
      OrderedDict([('practiceIdx', 1), ('trialRow', '15:17')]),
      OrderedDict([('practiceIdx', 2), ('trialRow', '30:32')]),
      OrderedDict([('practiceIdx', 3), ('trialRow', '45:47')]),
      OrderedDict([('practiceIdx', 4), ('trialRow', '60:62')])]
    LoopInitiator imageryPractice loopType="TrialHandler"
      Selected rows = $practiceIdx
      conditions = [OrderedDict([('field', 'audioStims/Forme.wav'), ('mots1', 'audioStims/balai.wav'), ('mots2', 'audioStims/seau.wav'), ('instruction', 'audioStims/long.wav'), ('correctAns', 'left'), ('img1', 'img/balaiseau.jpg'), ('nomdutest', 'Forme : plus longue ou plus ronde?'), ('consignepractice', "Vous avez entendu quatre mots:\n\n        'forme', 'balai', 'seau','longue'.\n\nPenser à la FORME d’un balai et d’un seau, quel objet a la forme plus longue? (ou plus ronde)\nSi c'est 'balai', appuyez le bouton flèche gauche'left' (correspond au premier object entendu).\nSi c'est 'seau', appuyez le bouton flèch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
      conditionsFile = ImageryPractice.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine practicetrials
      Routine trialvividnesspractive
      Routine resting
    LoopTerminator imageryPractice
    Routine prepareimagerytest
    LoopInitiator imageryTrials loopType="TrialHandler"
      Selected rows = $trialRow
      conditionsFile = ImageryOnline.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('field', 'audioStims/Forme.wav'), ('mots1', 'audioStims/robinet.wav'), ('mots2', 'audioStims/casserole.wav'), ('instruction', 'audioStims/ronde.wav'), ('correctAns', 'right'), ('img1', 'None'), ('img2', 'None'), ('imgCompare', 'None'), ('trialnumber', '1 sur 72 essais')]),
        OrderedDict([('field', 'audioStims/vuedeface.wav'), ('mots1', 'audioStims/cylindre.wav'), ('mots2', 'audioStims/cone.wav'), ('instruction', 'audioStims/rectangle.wav'), ('correctAns', 'left'), ('img1', 'None'), ('img2', 'None'), ('imgCompare', 'None'), ('trialnumber', '2 sur 72 essais')]),
        OrderedDict([('field', 'audioStims/Forme.wav'), ('mots1', 'audioStims/panthere.wav'), ('mots2', 'audioStims/cochon.wav'), ('instruction', 'audioStims/long.wav'), ('correctAns', 'left'), ('img1', 'None'), ('img2', 'None'), ('imgCompare', 'None'), ('trialnumber', '3 sur 72 essais')]),
        OrderedDict([('field', 'audioStims/Lettre.wav'), ('mots1', 'audioStims/meilleur.wav'), ('mots2', 'audioStims/impression.wav'), ('instruction', 'audioStims/haut.wav'), ('correctAns', 'left'), ('img1', 'None'), ('img2', 'None'), ('imgCompare', 'None'), ('trialnumber', '4 sur 72 essais')]),
        OrderedDict([('field', 'audioStims/Visage.wav'), ('mots1', 'audioStims/CharlesdeGaulle.wav'), ('mots2', 'audioStims/RafaelNadal.wav'), ('instruction', 'audioStims/arrondi.wav'), ('correctAns', 'right'), ('img1', 'None'), ('img2', 'None'), ('imgCompare', 'None'), ('trialnumber', '5 sur 72 essais')])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
      Routine imageryitemtrials
      Routine vividnesstrials
      Routine resting
    LoopTerminator imageryTrials
    Routine feedbackimagery
  LoopTerminator imagery_domains
  Routine perceptioninstr
  LoopInitiator perceptionTrials loopType="TrialHandler"
    conditions = [OrderedDict([('field', 'audioStims/Carte.wav'), ('mots1', 'audioStims/Mulhouse.wav'), ('mots2', 'audioStims/LaRochelle.wav'), ('instruction', 'audioStims/gauche.wav'), ('correctAns', 'right'), ('img1', 'imgPerception/Slide88.JPG'), ('img2', 'imgPerception/Slide89.JPG'), ('imgCompare', 'imgPerception/Slide90.JPG'), ('trialnumber', '1 sur 36 essais')])]
    conditionsFile = PerceptionOnline.xlsx
    loopType = sequential
    nReps = 1
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    Routine perceptioneachtrial
    Routine confiance
    Routine resting
  LoopTerminator perceptionTrials
  Routine feedbackperception
  Routine endsession
